PsychoPy2experiment version="2023.1.0"
Settings
  Data filename = u'data/%s' % (expInfo['date'])
  Experiment info = {'Nő_vagy_Férfi_vagy': '?', 'Életkorod': '?'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1600, 900]
  color = -1.0000, -1.0000, -1.0000
  expName = Test3
  keyboardBackend = ioHub
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Routines
  Routine First
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Hello!
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    KeyboardComponent key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Second
    TextComponent text_2
      letterHeight = 0.5
      startVal [time (s)] = 0.0
      text [set every repeat] = $stimuli
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    KeyboardComponent key_resp_2
      correctAns = $corr_ans
      forceEndRoutine = True
      startVal [time (s)] = 0.1
      storeCorrect = True
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  Routine Goodbye
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 3.0
      text = Kösz!
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Flow
  Routine First
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Stimuli.xlsx
    loopType = random
    nReps = 3
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    conditions:
      [{'stimuli': 'autó', 'corr_ans': 'a'},
      {'stimuli': 'kutya', 'corr_ans': 'l'},
      {'stimuli': 'csibe', 'corr_ans': 'l'},
      {'stimuli': 'hal', 'corr_ans': 'l'},
      {'stimuli': 'só', 'corr_ans': 'a'},
      {'stimuli': 'ház', 'corr_ans': 'a'},
      {'stimuli': 'kötél', 'corr_ans': 'a'},
      {'stimuli': 'zebra', 'corr_ans': 'l'}]
    Routine Second
  LoopTerminator trials
  Routine Goodbye
